/* This is a template file which is used by a python script to generate
 * rallpack3 for various cable size.
*/

dia = 1.0
len = 0.20618556701
incompts = 4850
entire_len = incompts * len
runtime = 250.0

create cable
access cable
nseg = incompts

/*
** Initialization routines
*/

cable {nseg=incompts L=entire_len diam=dia insert hh}
	

proc geometry() {
	L = entire_len
	diam = 1
	Ra = 100.0
}

proc membrane() {
	insert hh

	ena = 50
	ek = -77
	el = -65
	gnabar = .12
	gkbar = .036
	gl_hh = 1 / 40000

	cm = 1
}

/*
** Simulation and output of data
*/

proc run() { local io
	geometry()
	membrane()
	v = -65.0
        t=0
	
	m = m_hh
	h = h_hh
	n = n_hh

	dt = 0.05
	io = 0
	wopen("data/L4850.out")
	fstim(1) fstim(0, 0, 0, 250.0, .100)
		fprint("%g %g %g\n", t, v(0.000103092783505), v(0.999896907216))
	while (t < runtime) {
	    fadvance()
		fprint("%g %g %g\n", t, v(0.000103092783505), v(0.999896907216))
	}
	wopen()
}

finitialize()
run()
